// ----------------------Zooscan_create_project_5----------------------------------
version = "8.20";
date = "2023/09/12";

// v800
// vuescan absent
// select drive message

args = 	getArgument();
arg = 	split(args," ");
version = 	arg[0];
chem = 		arg[1];
check = 	arg[2];

// ---------------------- Default settings -----------------------------------
sizelimit = 	800;	
overlap = 	0.07;
min = 		0;
max = 		65536;
ratio =		"1.15";
gamma = 	1;
odrange = 	"1.8";
sens =		"before";
adjust = 	"yes";
medianchoice = 	"no";
medianvalue = 	1;
resolutionreduct = 2400;
dpi4800 = 	false;
narrow = 	false;	
large = 	false;	
largehd = 	false;	
source = "0";
ids = 		false;
processnew = 	true;
docu = 1;
vuescanexist = false;
vuescan_default = "9.7.67";
ret = args;

// ------------------ WARNING for version > 8.03 ------------------------------------------------------------
// aa = getBoolean("IMPORTANT NOTICE : \nYou can create a new project if you already installed vuescan "+vuescan_default+ "\nand \nif you are connected to a Zooscan.");

// --------------------- Test de l'existence du logiciel vuescan et recherche version ------------------------------------------
ret = runMacro("Zooscan_check_vuescan_pictures");
flag=toString(ret);
l= lengthOf(flag);
if (l==1)  { getBoolean("Zooscan_check_vuescan_pictures.txt macro aborted? \n \nPress Cancel to abort !    ");	} // if
else {	argret = split(flag," ");	vuescan = argret[0];	chemvue = argret[1];			} // else

if (vuescan == "unknown") {	aa = getBoolean("Vuescan is not properly installed. You cannot create a new project. \n \nCheck that you installed version "+vuescan_default+" before proceeding ! \nPress Cancel to abort !");	}
else {				vuescanexist = true;	}

//---------------------Lecture fichier "Zooscan" ---------------------------------
if (File.exists(chem+"\\Zooscan.txt") == 0) {
	ret = runMacro("Zooscan_select_system",chem);
	flag=toString(ret);
	if (lengthOf(flag) == 1)  { 	showMessage("Warning message : ''Zooscan_select_system'' process aborted                       "); 	} // if
	else { scanner = ligne[0];	vuescan = ligne[1]; source = ligne[2];	}
} // if
else {	// ---------- Lecture Zooscan.txt ---------------------------------
	open(chem+"\\Zooscan.txt");
	wait(100);
	data = getInfo();
	run('Close');
	ligne = split(data,"\n");
	scanner = ligne[0];	
	// ---------- Correction nom scanner si nouvelle version Zooprocess > 8.03 -----------------------------
	if (startsWith(scanner,"Perfection") == false && scanner != "no_scanner") {
		showMessage("Your version of Zooprocess has been updated. The Zooscan.txt file is updated now requiring to re-select the Zooscan version.");
		ret = runMacro("Zooscan_select_system.txt",chem);
		flag=toString(ret);
		if (lengthOf(flag) == 1)  { 	showMessage("Warning message : ''Zooscan_select_system'' process aborted                       "); 	} // if
		else { scanner = ligne[0];	vuescan = ligne[1]; source = ligne[2];	}
	}
}

// --------------- Version Zooscan --------------------------------------------------------------
zooscan = runMacro("Zooscan_define_zooscan_version.txt",scanner);
// showMessage("Zooscan : "+zooscan);

//---------------------------------Liste les projets existants enregistres dans le fichier zooprocess.txt---------------------------
// le premier enregistrement est reserve au dernier projet ouvert
open(chem+"zooprocess.txt");
wait(100);
info = getInfo();
data = split(info,"\n");
fin = data.length;
run("Close");
pathlist = 	newArray(500);
pathdisplay = 	newArray(1);
prt = 		"all";
doc = 		 "first_data_only";

if (data[0] == "Test file used by ZooProcess to distinguish the Zooscan working directory from other Zooscan folders.") { 
	Dialog.create("WARNING           ");
	Dialog.addMessage("New version of Zooprocess creates now a project list in zooprocess.txt");
	Dialog.addMessage("You have to create now some new folders for your files                    \nOnce created, please move all your images and files in the right folders   ");
	Dialog.show();
	pathdisplay[0] = "NEW";
	prt = "first_data_only";
} // if  
else if (data[0] == "NEW") {	pathdisplay[0] = "NEW";	prt = "first_data_only";		} // else if 
else {	pathdisplay = newArray(data.length+1);
	for (i = 0;i<data.length;i++) { 	val = data[i];	end = lengthOf(val); 	pathdisplay[i] = substring(val,12,end);	pathlist[i] = val;	} // for
	pathdisplay[data.length] = "NEW";
} // else

// ------------------------------- CREATION du projet -------------------------------------------
while (check != 1) {
	// --------------- Selection du drive pour installation --------------
	message = "Select the drive to create your new Zooscan project.";
	drive = runMacro("Zooprocess_select_drive",message);	
	toto = false;
	while (toto == false) {
		// ------------------- N° SERIE ZOOSCAN -----------------------------------------------------------------
		zooscan_sn_input = false;
		while(zooscan_sn_input == false) {				
			zooscan_sn = getNumber("Fill in the ZOOSCAN serial number (3 digits)",999);
			zooscan_sn_txt = toString(zooscan_sn);
			zooscan_sn_input = true;
			if 	(lengthOf(zooscan_sn_txt) == 1) 	{	zooscan_sn_txt = "00"+zooscan_sn_txt;		}
			else if (lengthOf(zooscan_sn_txt) == 2) 	{	zooscan_sn_txt = "0"+zooscan_sn_txt;		}
			else if (lengthOf(zooscan_sn_txt) == 3) 	{	zooscan_sn_txt = zooscan_sn_txt;		}			
			if (lengthOf(zooscan_sn_txt) == 3) {	zooscan_sn_input = true;	}
			else { showMessage("The serial number does not contain 3 digits, enter it again !");	zooscan_sn_input = false; }
		} // while
		// --------------- SAISIE ----------------
		Dialog.create("PROJECT MANAGER                version "+version);
		Dialog.addMessage("------------------------------ NEW project ------------------------------------------------------               ");
		Dialog.addMessage("ZOOSCAN model :  "+zooscan);	
		Dialog.addMessage("ZOOSCAN sn :  "+zooscan_sn_txt);	
		Dialog.addMessage("VUESCAN version : "+vuescan);
		Dialog.addMessage("PROJECT DRIVE : "+drive);
		Dialog.addMessage("----------------------------------------------------------------------------------------------------- ");
		Dialog.addMessage("DO NOT add the ''Zooscan_'' prefix");
		Dialog.addMessage("Enter project name               ");		
		Dialog.addString("           ","enter project name");   		
		Position_sn = newArray("start","end");
		Dialog.addMessage("Choose the position of the Zooscan serial number ");
		Dialog.addMessage("\nto be added to the project name");
		Dialog.addChoice("       ",Position_sn);
		Dialog.addMessage("----------------------------------------------------------------------------------------------------- ");
		Dialog.show();
		proj_raw = Dialog.getString();
		position_for_sn = Dialog.getChoice();
		proj_raw = toLowerCase(proj_raw);
		proj_raw = replace(proj_raw," ","_");
		proj_raw = replace(proj_raw,".","_");
		proj_raw = replace(proj_raw,"/","_");
		proj_raw = replace(proj_raw,";","_");
		proj_raw = replace(proj_raw,"!","_");
		// ------------ test start by zooscan_ et correction ----------------
		if (indexOf(proj_raw,"zooscan_") == 0) { proj_raw = substring(proj_raw,8,lengthOf(proj_raw));	}
		if (proj_raw != "enter_project_name") toto = true;
		if (position_for_sn == "start") {	proj = "Zooscan_sn"+zooscan_sn_txt+"_"+proj_raw;	}
		else {					proj = "Zooscan_"+proj_raw+"_sn"+zooscan_sn_txt;	}
		
		if (toto == true) {
			toto = getBoolean("Project name : "+proj+"\n \nPress YES to continue \nPress No to change the name of the project.");
		}
	} // while
	
	path = drive + proj;
	pathconfig =	path+"\\"+"\\Zooscan_config";
	pathmeta = 	path+"\\"+"\\Zooscan_meta\\";
	pathback = 	path+"\\"+"\\Zooscan_back\\";                               
	pathscan = 	path+"\\"+"\\Zooscan_scan";
	pathwork = 	path+"\\"+"\\Zooscan_scan\\"+"\\_work";
	pathraw = 	path+"\\"+"\\Zooscan_scan\\"+"\\_raw";
	pathresults = 	path+"\\"+"\\Zooscan_results";
	//------------------PID folders ---------------------------------------
	pathpid = 		path+"\\"+"\\PID_process";
	pathpidresults = 	path+"\\"+"\\PID_process\\"+"\\Pid_results\\";                    
	
	//---------------------------- Tester le nom dans la liste et verifier les repertoires --------------------------------------	
	for (i = 0;i<data.length;i++) { 
		if (path == pathlist[i]) {//----------------------Le nom existe dans la liste ---------------------------------------------
			if (File.exists(path) && File.exists(pathconfig) && File.exists(pathmeta) && File.exists(pathscan)   && File.exists(pathwork) && File.exists(pathraw) && File.exists(pathresults)) {
				info = getBoolean(path+" already in list         \nPress YES to select this project          \nPress NO to choose another     ");
				if (info == 1) { // Tout est correct, on le selectionne
					doc = "do_not_add_to_list";
					docu = 0;
					check = 1;	
					pathlist[0] = path;
				} // if 
				else {	//-------------On n' a pas selectionne ce projet, il faut donc en choisir un autre ---------------------
					check = 2;	
				} // else	
			} // if	
		} // if
	} // for
	if (check == 0 ) {  //-------------------Verifions toutefois que les repertoires n'existent pas deja meme si le nom n'est pas dans la liste----------------------
		if (File.exists(path) && File.exists(pathconfig) && File.exists(pathmeta) && File.exists(pathscan)   && File.exists(pathwork) && File.exists(pathraw) && File.exists(pathresults)) {
			//-----------Les repertoires existent mais le nom n'est pas dans la liste -----------------------------------------------------
			info = getBoolean(path+" already exists on your computer                                \nPress YES to select this project and add it to the projects list         \nPress NO to create another     ");
			if (info == 1) { // Tout est correct, on le selectionne mais on ajoutera son nom dans la liste
				doc = "add_to_list";
				docu = 0;
				check = 1;	
				e= substring(path,0,2);
				c = lengthOf(path);
				b = substring(path,3,c);
				e = e+"\\";
				path = e+"\\"+b;
				pathlist[0] = path;
			} // if 
		} // if 
		else {
			// -------------------- Choix des options ----------------------------------------------------------
			narrow = false;		large = false;	largehd = false;	dpi4800 = false;	processnew = true;
			listaff = newArray("Create scanning file for LARGE     frame at 2400 dpi","Create scanning file for NARROW frame at 2400 dpi","Create scanning file for LARGE     frame at 1200 dpi","No scanning file");
			//			if (scanner == "PerfectionV700" || scanner == "PerfectionV800") listaff = newArray("Create scanning file for LARGE     frame at 2400 dpi","Create scanning file for NARROW frame at 2400 dpi","Create scanning file for LARGE     frame at 1200 dpi","Create scanning file for NARROW frame at 4800 dpi","No scanning file");
			if (scanner == "PerfectionV700" || scanner == "PerfectionV800") listaff = newArray("Create scanning file for LARGE     frame at 2400 dpi","Create scanning file for NARROW frame at 2400 dpi","Create scanning file for LARGE     frame at 1200 dpi","No scanning file");
			Dialog.create("PROJECT MANAGER        version "+version);
			Dialog.addMessage("-----------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------");
			Dialog.addMessage("Project :  "+proj);
			Dialog.addMessage("ZOOSCAN model :  "+zooscan);	
			Dialog.addMessage("VUESCAN version : "+vuescan);
			Dialog.addMessage("-----------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------");
			Dialog.addChoice("                Select scanning option     ",listaff);
			Dialog.addMessage("-----------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------------");
			//			process = newArray("natural","Keep as before version 4","log-gamma2","log-gamma3");
			Dialog.show();
			scanning = 	Dialog.getChoice();	
			if (scanning == listaff[0]) {		largehd = true;	}
			else if (scanning == listaff[1]) {	narrow = true;	}
			else if (scanning == listaff[2]) {	large = true;	}
			else { aa = getBoolean("Scanning method not defined !");	}
			
			//			if (scanner == "PerfectionV700" || scanner =="PerfectionV750" || scanner =="GT-X900" || scanner =="GT-X970" || scanner == "PerfectionV800" || scanner =="PerfectionV850" || scanner =="GT-X980"){
			//				if (scanning == listaff[3]) dpi4800 = true;
			//			}
			processnew = 		true;
			method = 		"natural";
			//			if (method == "Keep as before version 4") 	method = "0";
			if (method == "natural") 			method = "neutral";
			check = 1;	
		} // else
	} // check = 0
} // while

// ---------------- Donnees de base ----------------------------------------------------------
chemconfig =	chem+"\\Zooscan_config";
chemN =	chemconfig + "\\vuescan_zooscan_calibration_OD_level_cadre1.ini";
chemL =	chemconfig + "\\vuescan_zooscan_calibration_OD_level_cadre2.ini";
chemODnarrow = 	chemconfig + "\\process_install_narrow_config.txt";
chemODboth= 	chemconfig + "\\process_install_both_config.txt";
if (File.exists(chemconfig)) {
	//------------ Lecture des valeurs dans les fichiers
	if (File.exists(chemODnarrow) || File.exists(chemODboth)) {
		if (File.exists(chemODnarrow)) {		
			open(chemODnarrow);
			wait(100);	
			configf = "process_install_narrow_config.txt";			
			config = getInfo();
			selectWindow(configf);		
			run("Close");	
		} // if
		if (File.exists(chemODboth)) {		
			open(chemODboth);	
			wait(100);
			configf = "process_install_both_config.txt";			
			config = getInfo();
			selectWindow(configf);		
			run("Close");	
		} // if
		wait(500);
		conf  = split(config,"\n");
		for (i=0; i<conf.length; i++)	{ texte = conf[i];	
			ssarray = split(texte," ");	
			data = ssarray[1];		
			if (startsWith(texte,"doxabspos_inch=")) {	Xpos = data;	} // if
			if (startsWith( texte,"doyabspos_inch=")) {	Ypos = data;	} // if
		} // for
	} // if
	else {	Xpos = 		0.3367;		
		Ypos = 	3.9928;		
	} // else
	if (File.exists(chemN)) {
		open(chemN);
		wait(500);
		config = getInfo();
		selectWindow("vuescan_zooscan_calibration_OD_level_cadre1.ini");		
		run("Close");
		conf  = split(config,"\n");
		for (i=0; i<conf.length; i++)	{ ssarray = conf[i];		
			if (startsWith(ssarray,"XOffset")) {	deb= indexOf(ssarray,"=");	
				long= lengthOf(ssarray); 	
				data = substring(ssarray,deb+1,long);
				XOffsetN = data;	
			} // if
			if (startsWith(ssarray,"YOffset")) {	deb= indexOf(ssarray,"=");	
				long= lengthOf(ssarray); 	
				data = substring(ssarray,deb+1,long);
				YOffsetN = data;	
			} // if
			if (startsWith(ssarray,"XSize")) {	deb= indexOf(ssarray,"=");	
				long= lengthOf(ssarray); 	
				data = substring(ssarray,deb+1,long);
				XSizeN = data;		
			} // if
			if (startsWith(ssarray,"YSize")) {	deb= indexOf(ssarray,"=");	
				long= lengthOf(ssarray); 	
				data = substring(ssarray,deb+1,long);
				YSizeN = data;		
			} // if
		} // for
	} // if
	else { 	XOffsetN = 	10194;
		YOffsetN = 	1393;
		XSizeN = 		20911;
		YSizeN = 	48502;
	} // else 
	if (File.exists(chemL)) { 
		open(chemL);
		wait(500);
		config = getInfo();
		selectWindow("vuescan_zooscan_calibration_OD_level_cadre2.ini");		
		run("Close");
		conf  = split(config,"\n");
		for (i=0; i<conf.length; i++)	{ ssarray = conf[i];					
			if (startsWith(ssarray,"XOffset")) {	deb= indexOf(ssarray,"=");	
				long= lengthOf(ssarray); 	
				data = substring(ssarray,deb+1,long);
				XOffsetL = data;	
			} // if
			if (startsWith(ssarray,"YOffset")) {	deb= indexOf(ssarray,"=");	
				long= lengthOf(ssarray); 	
				data = substring(ssarray,deb+1,long);
				YOffsetL = data;	
			} // if
			if (startsWith(ssarray,"XSize")) {	deb= indexOf(ssarray,"=");	
				long= lengthOf(ssarray); 	
				data = substring(ssarray,deb+1,long);
				XSizeL = data;		
			} // if
			if (startsWith(ssarray,"YSize")) {	deb= indexOf(ssarray,"=");	
				long= lengthOf(ssarray); 	
				data = substring(ssarray,deb+1,long);
				YSizeL = data;		
			} // if
		} // for
	} // if
	else { 	XOffsetL = 	5663;
		YOffsetL = 	1393;
		XSizeL = 	29886;
		YSizeL = 	48502;
	} // else 
} // if
else { 	Xpos = 		0.3367;		
	Ypos = 	3.9928;
	XOffsetN = 	10194;
	YOffsetN = 	1393;
	XSizeN = 	20911;
	YSizeN = 	48502;
	XOffsetL = 	5663;
	YOffsetL = 	1393;
	XSizeL = 	29886;
	YSizeL = 	48502;
} // else

// ---------------- Creation des fichiers de scan pour vuescan -------
//aa = getBoolean(narrow+"   "+large+"   "+largehd+"   "+dpi4800+"   "+docu);
if (narrow == true || large == true || largehd == true || dpi4800 == true ) {
	dim_ok = false;
	while (dim_ok == false) {
		Dialog.create("Scanning area for plankton imaging           ");
		Dialog.addMessage("------------------------------------------------------------------------------------------------------------        ");
		Dialog.addMessage("Zooscan version :  "+zooscan);	
		Dialog.addMessage("VUESCAN version : "+vuescan);
		Dialog.addMessage("Default values are read from the Zooprocess installation settings.          \nChange them according to calibration sheet if necessary.    \nor \nChange them according to the needs of your project    ");
		Dialog.addMessage("---------- Optical Density position -------------------------------------------------------------------        ");
		Dialog.addNumber("              X position  ",Xpos);
		Dialog.addNumber("              Y position  ",Ypos);
		if (narrow == true || dpi4800 == true) {
			Dialog.addMessage("---------- NARROW FRAME --------------------------------------------------------------------------        ");
			Dialog.addNumber("              XOffset  ",XOffsetN);
			Dialog.addNumber("              YOffset  ",YOffsetN);
			Dialog.addNumber("              XSize ",XSizeN);
			Dialog.addNumber("              YSize ",YSizeN);
		} // if
		if (large == true || largehd == true) {
			Dialog.addMessage("---------- LARGE FRAME -----------------------------------------------------------------------------        ");
			Dialog.addNumber("              XOffset  ",XOffsetL);
			Dialog.addNumber("              YOffset  ",YOffsetL);
			Dialog.addNumber("              XSize ",XSizeL);
			Dialog.addNumber("              YSize ",YSizeL);
			Dialog.addMessage("------------------------------------------------------------------------------------------------------------        ");
		} // if
		Dialog.show;
		Xpos = 		Dialog.getNumber();
		Ypos = 		Dialog.getNumber();
		if (narrow == true || dpi4800 == true) {
			XOffsetN = 	Dialog.getNumber();
			YOffsetN = 	Dialog.getNumber();
			XSizeN = 		Dialog.getNumber();
			YSizeN = 	Dialog.getNumber();
		} // if
		if (large == true  || largehd == true) {
			XOffsetL = 	Dialog.getNumber();
			YOffsetL = 	Dialog.getNumber();
			XSizeL = 	Dialog.getNumber();
			YSizeL = 	Dialog.getNumber();
		} // if
		dim_ok = true;		
		if (narrow == true && dpi4800 == true) {
			img_dim = parseInt(XSizeN) * parseInt(YSizeN);
			if (img_dim > 1032230000) {	
				dim_ok = false;
				aa = getBoolean("Overall image size (XSize * XSize) for narrow frame at 4800dpi exceed 1032230000. \nEnter new dimensions !\n \nCONTACT HYDROPTIC if necessary ! \n \nPress YES to enter again, Cancel to abort.");
			}
		}		
	} // while
} // if

//---------------------Creation des repertoires------------------------------------------------------------	
File.makeDirectory(path);
File.makeDirectory(pathconfig);
File.makeDirectory(pathmeta);
File.makeDirectory(pathscan);
File.makeDirectory(pathwork);
File.makeDirectory(pathraw);
File.makeDirectory(pathresults);
File.makeDirectory(pathback);
//-----------------PID folders-----------------------------------------------------------------------------
File.makeDirectory(pathpid);
File.makeDirectory(pathpidresults);
/*
File.makeDirectory(pathlearn);
File.makeDirectory(pathvig);
File.makeDirectory(pathsortedvig);

File.makeDirectory(pathpredic); 
File.makeDirectory(pathpidpredicted); 
File.makeDirectory(pathdat1extracted); 		
File.makeDirectory(pathdat1validatted);	
*/
e= substring(path,0,2);
c = lengthOf(path);
b = substring(path,3,c);
e = e+"\\";
path = e+"\\"+b;
pathlist[0] = path;
doc = "add_to_list";
pathlist[0] = path;

if (docu == 1) { 
	// -------------------------- Creation du "optionfile.txt" -------------------------------------------
	if (processnew == true) {
		if (isOpen("Log")) {	selectWindow("Log");	run("Close");	} // if
		print("option= A");
		text =  "save=" + pathconfig + "\\optionfile.txt";
		selectWindow("Log");
		run("Text...",text);	
	} // if
	else {
		if (isOpen("Log")) {	selectWindow("Log");	run("Close");	} // if
		print("option= B");
		text =  "save=" + pathconfig + "\\optionfile.txt";
		selectWindow("Log");
		run("Text...",text);	
	} // else
	// ----------------- Fichier de MODE ---------------------------------
	if (isOpen("Log")) {	selectWindow("Log");	run("Close");	} // if
	print("Do not delete");
	selectWindow("Log");
	text =  "save=" + pathconfig + "\\mode_file_user.txt";
	run("Text...",text);	
	run("Close");
	
	// --------------------------Affichage de la date et de l'heure ------------------
	dateheure =	runMacro("Zooscan_get_time_5");
	
	message = "INFORMATION : \n     ";
	// ------------------ Creation du fichier LUT ------------------------------
	lutfile = 	File.exists(pathconfig+"\\lut.txt");
	if (lutfile != 1) { 
		if (isOpen("Log")) {	selectWindow("Log");	run("Close");	} // if
		if (scanner == "PerfectionV700" || scanner =="PerfectionV750" || scanner =="GT-X900" || scanner =="GT-X970" || scanner == "PerfectionV800" || scanner =="PerfectionV850" || scanner =="GT-X980")		sizelimit = 3000;
		print(min);
		print(max);
		print(gamma);
		print(sens);
		print(adjust);
		print(odrange);
		print(ratio);
		print(sizelimit);
		print(overlap);
		if (scanner == "Perfection4490") medianchoice = "yes";
		print(medianchoice);
		print(medianvalue);
		print(resolutionreduct);
		selectWindow("Log");
		text =  "save=" + pathconfig + "\\lut.txt";
		run("Text...",text);	
	} // if
	else { message = message+"\n ''lut.txt'' file not replaced.         ";	} // else
	
	// ----------------- Creation d'un fichier config du traitement -------
	conffilen = 	File.exists(pathconfig+"\\process_install_narrow_config.txt");
	conffileb = 	File.exists(pathconfig+"\\process_install_both_config.txt");
	if (conffilen != 1 || conffileb != 1) { 
		if (isOpen("Log")) {	selectWindow("Log");	run("Close");	} // if
		print("background_process= last");
		print("enhance_thumbnail= no");
		print("calibration= created_"+dateheure);
		print("jpeg= 100");
		print("zip= 0");
		print("greycor= 4");
		print("resolution= 2400");
		if (scanner == "Perfection4490") {	print("greytaux= 0.85");	} // if
		else { 			print("greytaux= 0.9");	} //  else	
		print("yminref= 0");
		print("doyofset= 150");
		print("doxpos= 2");
		print("xdimref_inch= 0.025");
		print("ydimref_inch= 0.25");
		print("dostd= 2.0");
		print("doecart= 20.0");
		print("subimgx= 0");
		print("method= "+method);
		if (method == "0") 			upper = 250;
		else if (method == "neutral") 	upper = 243;
		else if (method == "log-gamma2") 	upper = 250;
		else {				upper = 250;	} // else
		print("upper= "+upper);
		print("greyref= 174");
		print("voxelwidth= 1");
		print("voxelheigth= 1");
		print("voveldepth= 1");
		print("voxelunit= pixel");
		print("backval= 100.0");
		print("minsizeesd_mm= 0.3");
		print("maxsizeesd_mm= 100");
		print("longline_mm= 1.0");
		print("doxabspos_inch= "+Xpos);
		print("doyabspos_inch= "+Ypos);
		print("bleft= 16.0");
		print("broll= 8");
		print("bright= 4.0");
		print("contrast_pourcent= 1.3");
		print("doubloonxy_inch= 0.05");
		print("doubloonarea_pourcent= 0.1");
		print("greylimit= 10");
		print("frame= both");
		selectWindow("Log");
		text =  "save=" + pathconfig + "\\process_install_both_config.txt";
		run("Text...",text);	
		wait(100);
		run("Close");
	} // if
	else { message = message+"\n ''process_install_*_config.txt'' file not replaced.                    ";	} // else
	
	// ---------------- Narrow --------------------
	if (narrow == true && (scanner == "Perfection4490" || scanner == "Perfection4990")) {
		conffile = 	File.exists(pathconfig+"\\vuescan_zooscan_2400dpi_frame1_narrow.ini");
		if (conffile != 1) { 
			if (isOpen("Log")) {	selectWindow("Log");	run("Close");	} // if
			print("[VueScan]");
			print("[Input-"+scanner+"-Flatbed]");
			print("Media=1");
			print("Quality=4");
			print("BitsPerPixel=3");
			print("MakeGrayFrom=2");
			print("PreviewResolution=6");	
			print("ScanResolution=3");
			print("Rotation=3");
			print("Mirror=1");
			print("FileType=2");
			
			print("[Input]");
			print("Options=2");
			print("[Crop-"+scanner+"-Flatbed]");
			print("AutoOffset=0");
			print("AutoRotate=0");
			print("CropSize=0");
			print("XSize="+XSizeN);
			print("YSize="+YSizeN);
			print("PreviewArea=0");
			print("PreviewXOffset="+XOffsetN);
			print("PreviewYOffset="+YOffsetN);
			print("PreviewXSize="+XSizeN);
			print("PreviewYSize="+YSizeN);
			print("[Crop]");
			print("Options=2");
			print("[Filter]");
			print("Options=2");
			print("[Color-"+scanner+"-Flatbed]");
			print("ColorBalance=0");
			print("WhitePoint=0");
			print("WhitePointRed=236");
			print("WhitePointGreen=236");
			print("WhitePointBlue=236");
			print("Brightness=900");
			print("[Color]");
			print("PixelColors=1");
			print("Options=2");
			print("[Output-"+scanner+"-Flatbed]");
			print("PrintedUnits=0");
			print("[Output]");
			print("JPEGFile=0");
			print("DefaultFolder=E:\\Zooscan_pointb_rg\\Zooscan_scan");
			print("RawFile=1");
			print("RawFileName=sample_1=.tif");
			print("RawFileType=2");
			print("RawCompression=0");
			print("Copyright=Zooscan_CNRS_2006");
			print("LogFile=0");
			print("Options=2");
			print("[Prefs]");
			print("GraphType=2");
			print("ExternalViewer=0");
			print("ExternalEditor=0");
			print("WindowXOffset=10");
			print("WindowYOffset=10");
			print("WindowXSize=1008");
			print("WindowYSize=990");
			print("GuidedMode=0");
			print("EnablePopupTips=0");
			print("StartupTip=0");
			selectWindow("Log");
			
			print("[Prefs-"+scanner+"-Flatbed]");
			print("CropUnits=0");
			print("PrintedUnits=0");
			text =  "save=" + pathconfig + "\\vuescan_zooscan_2400dpi_frame1_narrow.ini";
			run("Text...",text);	
			run("Close");
		} // if narrow
	} // if
	else if (narrow == true &&  (scanner == "PerfectionV700" || scanner =="PerfectionV750" || scanner =="GT-X900" || scanner =="GT-X970" )) {		// Narrow 2400dpi
		conffile = 	File.exists(pathconfig+"\\vuescan_zooscan_2400dpi_frame1_narrow.ini");
		if (conffile != 1) { 
			if (isOpen("Log")) {	selectWindow("Log");	run("Close");	} // if
			print("[VueScan]");
			print("[Input]");
			print("Source="+source);
			print("Options=2");
			print("[Input-"+scanner+"-Flatbed]");
			print("Media=1");
			print("BitsPerPixel=3");
			print("MakeGrayFrom=2");
			print("PreviewResolution=8");
			print("ScanResolution=3");
			print("Rotation=3");
			print("Mirror=1");
			print("FileType=2");
			
			print("[Crop-"+scanner+"-Flatbed]");
			print("CropSize=0");
			print("XSize="+XSizeN);
			print("YSize="+YSizeN);		
			print("AutoOffset=0");
			print("PreviewArea=0");		
			print("PreviewXSize="+XSizeN);
			print("PreviewYSize="+YSizeN);
			print("PreviewXOffset="+XOffsetN);
			print("PreviewYOffset="+YOffsetN);
			
			print("[Color-"+scanner+"-Flatbed]");
			print("ColorBalance=0");
			
			print("[Output]");
			print("JPEGProfile=0");
			print("RawCompression=0");
			print("LogFile=0");
			print("Copyright=Zooscan_CNRS_2011_calibration");	
			
			print("[Output-"+scanner+"-Flatbed]");
			print("JPEGFile=0");
			print("RawFile=1");
			
			print("[Prefs-"+scanner+"-Flatbed]");
			print("CropUnits=0");
			print("PrintedUnits=0");
			
			print("[Prefs]");
			print("XOffset="+XOffsetN);
			print("YOffset="+YOffsetN);
			print("StartupTip=0");
			print("WindowXOffset=10");
			print("WindowYOffset=10");
			print("WindowXSize=1008");
			print("WindowYSize=990");
			print("GuidedMode=0");
			print("Options=1");
			print("FontSize=10");
			print("ExternalViewer=0");
			print("ExternalEditor=0");
			print("ImageMemory=8000");
			print("BeepWhenDone=1");	
			print("GraphType=2");
			
			selectWindow("Log");
			text =  "save=" + pathconfig + "\\vuescan_zooscan_2400dpi_frame1_narrow.ini";
			run("Text...",text);	
			run("Close");
		} // if narrow
	} // if
	else if (narrow == true && (scanner == "PerfectionV800" || scanner =="PerfectionV850" || scanner =="GT-X980" )) {		// Narrow 2400dpi
		conffile = 	File.exists(pathconfig+"\\vuescan_zooscan_2400dpi_frame1_narrow.ini");
		if (conffile != 1) { 
			if (isOpen("Log")) {	selectWindow("Log");	run("Close");	} // if
			print("[VueScan]");
			print("[Input]");
			print("Source="+source);	
			print("Options=2");
			print("DefaultFolder=C:");
			print("[Input-"+scanner+"-Flatbed]");
			print("Media=1");
			print("BitsPerPixel=3");
			print("MakeGrayFrom=2");
			print("PreviewResolution=8");
			print("ScanResolution=3");
			print("Rotation=3");
			print("Mirror=1");
			print("FileType=2");
			
			print("[Crop-"+scanner+"-Flatbed]");
			print("CropSize=0");
			print("XSize="+XSizeN);
			print("YSize="+YSizeN);		
			print("AutoOffset=0");
			print("PreviewArea=0");		
			print("PreviewXSize="+XSizeN);
			print("PreviewYSize="+YSizeN);
			print("PreviewXOffset="+XOffsetN);
			print("PreviewYOffset="+YOffsetN);
			
			print("[Color-"+scanner+"-Flatbed]");
			print("ColorBalance=0");
			
			print("[Output]");
			print("JPEGProfile=0");
			print("RawCompression=0");
			print("LogFile=0");
			print("Copyright=Zooscan_CNRS_2011_calibration");	
			
			print("[Output-"+scanner+"-Flatbed]");
			print("JPEGFile=0");
			print("RawFile=1");
			print("PDFFile=0");
			
			print("[Prefs-"+scanner+"-Flatbed]");
			print("CropUnits=0");
			print("PrintedUnits=0");
			
			print("[Prefs]");
			print("XOffset="+XOffsetN);
			print("YOffset="+YOffsetN);
			print("StartupTip=0");
			print("WindowXOffset=10");
			print("WindowYOffset=10");
			print("WindowXSize=1008");
			print("WindowYSize=990");
			print("GuidedMode=0");
			print("Options=1");
			print("FontSize=10");
			print("ExternalViewer=0");
			print("ExternalEditor=0");
			print("ImageMemory=8000");
			print("BeepWhenDone=1");	
			print("GraphType=2");
			print("SplashScreen=0");
			
			selectWindow("Log");
			text =  "save=" + pathconfig + "\\vuescan_zooscan_2400dpi_frame1_narrow.ini";
			run("Text...",text);	
			run("Close");
		} // if narrow
	} // if
	else { message = message+"\n ''vuescan_zooscan_4800dpi_frame1_narrow.ini'' file not replaced/created.                    ";	} // else
	
	// ---------------- LARGE 1200 dpi --------------------
	if (large == true  && (scanner == "Perfection4490" || scanner == "Perfection4990")) {
		conffile = 	File.exists(pathconfig+"\\vuescan_zooscan_1200dpi_frame2_large.ini");
		if (conffile != 1) { 
			if (isOpen("Log")) {	selectWindow("Log");	run("Close");	} // if
			print("[VueScan]");
			print("[Input-"+scanner+"-Flatbed]");
			print("Media=1");
			print("Quality=4");
			print("BitsPerPixel=3");
			print("MakeGrayFrom=2");
			print("PreviewResolution=6");
			print("ScanResolution=4");
			print("Rotation=3");
			print("Mirror=1");
			print("FileType=2");
			
			print("[Input]");
			print("Options=2");
			print("[Crop-"+scanner+"-Flatbed]");
			print("AutoOffset=0");
			print("AutoRotate=0");
			print("CropSize=0");
			print("XSize="+XSizeL);
			print("YSize="+YSizeL);
			print("PreviewArea=0");
			print("PreviewXOffset="+XOffsetL);
			print("PreviewYOffset="+YOffsetL);
			print("PreviewXSize="+XSizeL);
			print("PreviewYSize="+YSizeL);
			print("[Crop]");
			print("Options=2");
			print("[Filter]");
			print("Options=2");
			print("[Color-"+scanner+"-Flatbed]");
			print("ColorBalance=0");
			print("WhitePoint=0");
			print("WhitePointRed=236");
			print("WhitePointGreen=236");
			print("WhitePointBlue=236");
			print("Brightness=900");
			print("[Color]");
			print("PixelColors=1");
			print("Options=2");
			print("[Output-"+scanner+"-Flatbed]");
			print("PrintedUnits=0");
			print("[Output]");
			print("JPEGFile=0");
			print("DefaultFolder=E:\\Zooscan_pointb_rg\\Zooscan_scan");
			print("RawFile=1");
			print("RawFileName=sample_1=.tif");
			print("RawFileType=2");
			print("RawCompression=0");
			print("Copyright=Zooscan_CNRS_2006");
			print("LogFile=0");
			print("Options=2");
			print("[Prefs]");
			print("GraphType=2");
			print("ExternalViewer=0");
			print("ExternalEditor=0");
			print("WindowXOffset=10");
			print("WindowYOffset=10");
			print("WindowXSize=1008");
			print("WindowYSize=990");
			print("GuidedMode=0");
			print("EnablePopupTips=0");
			print("StartupTip=0");
			print("[Prefs-"+scanner+"-Flatbed]");
			print("CropUnits=0");
			print("PrintedUnits=0");
			selectWindow("Log");
			text =  "save=" + pathconfig + "\\vuescan_zooscan_1200dpi_frame2_large.ini";
			run("Text...",text);	
			run("Close");
		} // if large
	} // if
	else if (large == true &&  (scanner == "PerfectionV700" || scanner =="PerfectionV750" || scanner =="GT-X900" || scanner =="GT-X970" )) {
		conffile = 	File.exists(pathconfig+"\\vuescan_zooscan_1200dpi_frame2_large.ini");
		if (conffile != 1) { 
			if (isOpen("Log")) {	selectWindow("Log");	run("Close");	} // if
			print("[VueScan]");		
			print("[Input]");
			print("Source="+source);
			print("Options=2");
			print("[Input-"+scanner+"-Flatbed]");
			print("Media=1");
			print("BitsPerPixel=3");
			print("MakeGrayFrom=2");
			print("PreviewResolution=8");
			print("ScanResolution=4");
			print("Rotation=3");
			print("Mirror=1");
			print("FileType=2");
			
			print("[Crop-"+scanner+"-Flatbed]");
			print("CropSize=0");
			print("XSize="+XSizeL);
			print("YSize="+YSizeL);		
			print("AutoOffset=0");
			print("PreviewArea=0");		
			print("PreviewXSize="+XSizeL);
			print("PreviewYSize="+YSizeL);
			print("PreviewXOffset="+XOffsetL);
			print("PreviewYOffset="+YOffsetL);
			
			print("[Color-"+scanner+"-Flatbed]");
			print("ColorBalance=0");
			
			print("[Output]");
			print("JPEGProfile=0");
			print("RawCompression=0");
			print("LogFile=0");
			print("Copyright=Zooscan_CNRS_2011_calibration");	
			
			print("[Output-"+scanner+"-Flatbed]");
			print("JPEGFile=0");
			print("RawFile=1");
			
			print("[Prefs-"+scanner+"-Flatbed]");
			print("CropUnits=0");
			print("PrintedUnits=0");
			
			print("[Prefs]");
			print("XOffset="+XOffsetL);
			print("YOffset="+YOffsetL);
			print("StartupTip=0");
			print("WindowXOffset=10");
			print("WindowYOffset=10");
			print("WindowXSize=1008");
			print("WindowYSize=990");
			print("GuidedMode=0");
			print("Options=1");
			print("FontSize=10");
			print("ExternalViewer=0");
			print("ExternalEditor=0");
			print("ImageMemory=8000");
			print("BeepWhenDone=1");	
			print("GraphType=2");
			selectWindow("Log");
			text =  "save=" + pathconfig + "\\vuescan_zooscan_1200dpi_frame2_large.ini";
			run("Text...",text);	
			run("Close");
		} // if narrow
	} // if
	else if (large == true && (scanner == "PerfectionV800" || scanner =="PerfectionV850" || scanner =="GT-X980" )) {
		conffile = 	File.exists(pathconfig+"\\vuescan_zooscan_1200dpi_frame2_large.ini");
		if (conffile != 1) { 
			if (isOpen("Log")) {	selectWindow("Log");	run("Close");	} // if
			print("[VueScan]");		
			print("[Input]");
			print("Source="+source);
			print("Options=2");
			print("DefaultFolder=C:");
			print("[Input-"+scanner+"-Flatbed]");
			print("Media=1");
			print("BitsPerPixel=3");
			print("MakeGrayFrom=2");
			print("PreviewResolution=8");
			print("ScanResolution=4");
			print("Rotation=3");
			print("Mirror=1");
			print("FileType=2");
			
			print("[Crop-"+scanner+"-Flatbed]");
			print("CropSize=0");
			print("XSize="+XSizeL);
			print("YSize="+YSizeL);		
			print("AutoOffset=0");
			print("PreviewArea=0");		
			print("PreviewXSize="+XSizeL);
			print("PreviewYSize="+YSizeL);
			print("PreviewXOffset="+XOffsetL);
			print("PreviewYOffset="+YOffsetL);
			
			print("[Color-"+scanner+"-Flatbed]");
			print("ColorBalance=0");
			
			print("[Output]");
			print("JPEGProfile=0");
			print("RawCompression=0");
			print("LogFile=0");
			print("Copyright=Zooscan_CNRS_2011_calibration");	
			
			print("[Output-"+scanner+"-Flatbed]");
			print("JPEGFile=0");
			print("RawFile=1");
			print("PDFFile=0");
			
			print("[Prefs-"+scanner+"-Flatbed]");
			print("CropUnits=0");
			print("PrintedUnits=0");
			
			print("[Prefs]");
			print("XOffset="+XOffsetL);
			print("YOffset="+YOffsetL);
			print("StartupTip=0");
			print("WindowXOffset=10");
			print("WindowYOffset=10");
			print("WindowXSize=1008");
			print("WindowYSize=990");
			print("GuidedMode=0");
			print("Options=1");
			print("FontSize=10");
			print("ExternalViewer=0");
			print("ExternalEditor=0");
			print("ImageMemory=8000");
			print("BeepWhenDone=1");	
			print("GraphType=2");
			print("SplashScreen=0");
			
			selectWindow("Log");
			text =  "save=" + pathconfig + "\\vuescan_zooscan_1200dpi_frame2_large.ini";
			run("Text...",text);	
			run("Close");
		} // if narrow
	} // if
	else { message = message+"\n ''vuescan_zooscan_1200dpi_frame2_large.ini'' file not replaced/created.                    ";		} // else
	
	// ---------------- LARGE 2400 dpi --------------------
	if (largehd == true  && (scanner == "Perfection4490" || scanner == "Perfection4990")) {
		conffile = 	File.exists(pathconfig+"\\vuescan_zooscan_2400dpi_frame2_large.ini");
		if (conffile != 1) { 
			if (isOpen("Log")) {	selectWindow("Log");	run("Close");	} // if
			print("[VueScan]");
			
			print("[Input-"+scanner+"-Flatbed]");
			print("Media=1");
			print("Quality=4");
			print("BitsPerPixel=3");
			print("MakeGrayFrom=2");
			print("PreviewResolution=6");
			print("ScanResolution=3");
			print("Rotation=3");
			print("Mirror=1");
			print("FileType=2");
			
			print("[Input]");
			print("Options=2");
			print("[Crop-"+scanner+"-Flatbed]");
			print("AutoOffset=0");
			print("AutoRotate=0");
			print("CropSize=0");
			print("XSize="+XSizeL);
			print("YSize="+YSizeL);
			print("PreviewArea=0");
			print("PreviewXOffset="+XOffsetL);
			print("PreviewYOffset="+YOffsetL);
			print("PreviewXSize="+XSizeL);
			print("PreviewYSize="+YSizeL);
			print("[Crop]");
			print("Options=2");
			print("[Filter]");
			print("Options=2");
			print("[Color-"+scanner+"-Flatbed]");
			print("ColorBalance=0");
			print("WhitePoint=0");
			print("WhitePointRed=236");
			print("WhitePointGreen=236");
			print("WhitePointBlue=236");
			print("Brightness=900");
			print("[Color]");
			print("PixelColors=1");
			print("Options=2");
			print("[Output-"+scanner+"-Flatbed]");
			print("PrintedUnits=0");
			print("[Output]");
			print("JPEGFile=0");
			print("DefaultFolder=E:\\Zooscan_pointb_rg\\Zooscan_scan");
			print("RawFile=1");
			print("RawFileName=sample_1=.tif");
			print("RawFileType=2");
			print("RawCompression=0");
			print("Copyright=Zooscan_CNRS_2006");
			print("LogFile=0");
			print("Options=2");
			print("[Prefs]");
			print("GraphType=2");
			print("ExternalViewer=0");
			print("ExternalEditor=0");
			print("WindowXOffset=10");
			print("WindowYOffset=10");
			print("WindowXSize=1008");
			print("WindowYSize=990");
			print("GuidedMode=0");
			print("EnablePopupTips=0");
			print("StartupTip=0");
			print("[Prefs-"+scanner+"-Flatbed]");
			print("CropUnits=0");
			print("PrintedUnits=0");
			selectWindow("Log");
			text =  "save=" + pathconfig + "\\vuescan_zooscan_2400dpi_frame2_large.ini";
			run("Text...",text);	
			run("Close");
		} // if large
	} // if
	else if (largehd == true &&   (scanner == "PerfectionV700" || scanner =="PerfectionV750" || scanner =="GT-X900" || scanner =="GT-X970" )) {
		conffile = 	File.exists(pathconfig+"\\vuescan_zooscan_2400dpi_frame2_large.ini");
		if (conffile != 1) { 
			if (isOpen("Log")) {	selectWindow("Log");	run("Close");	} // if
			print("[VueScan]");			
			print("[Input]");
			print("Source="+source);
			print("Options=2");
			print("[Input-"+scanner+"-Flatbed]");
			print("Media=1");
			print("BitsPerPixel=3");
			print("MakeGrayFrom=2");
			print("PreviewResolution=8");
			print("ScanResolution=3");
			print("Rotation=3");
			print("Mirror=1");
			print("FileType=2");
			
			print("[Crop-"+scanner+"-Flatbed]");
			print("CropSize=0");
			print("XSize="+XSizeL);
			print("YSize="+YSizeL);		
			print("AutoOffset=0");
			print("PreviewArea=0");		
			print("PreviewXSize="+XSizeL);
			print("PreviewYSize="+YSizeL);
			print("PreviewXOffset="+XOffsetL);
			print("PreviewYOffset="+YOffsetL);
			
			print("[Color-"+scanner+"-Flatbed]");
			print("ColorBalance=0");
			
			print("[Output]");
			print("JPEGProfile=0");
			print("RawCompression=0");
			print("LogFile=0");
			print("Copyright=Zooscan_CNRS_2011_calibration");	
			
			print("[Output-"+scanner+"-Flatbed]");
			print("JPEGFile=0");
			print("RawFile=1");
			
			print("[Prefs-"+scanner+"-Flatbed]");
			print("CropUnits=0");
			print("PrintedUnits=0");
			
			print("[Prefs]");
			print("XOffset="+XOffsetL);
			print("YOffset="+YOffsetL);
			print("StartupTip=0");
			print("WindowXOffset=10");
			print("WindowYOffset=10");
			print("WindowXSize=1008");
			print("WindowYSize=990");
			print("GuidedMode=0");
			print("Options=1");
			print("FontSize=10");
			print("ExternalViewer=0");
			print("ExternalEditor=0");
			print("ImageMemory=8000");
			print("BeepWhenDone=1");	
			print("GraphType=2");
			selectWindow("Log");
			text =  "save=" + pathconfig + "\\vuescan_zooscan_2400dpi_frame2_large.ini";
			run("Text...",text);	
			run("Close");
		} // if narrow
	} // if
	else if (largehd == true &&  (scanner == "PerfectionV800" || scanner =="PerfectionV850" || scanner =="GT-X980" )) {
		conffile = 	File.exists(pathconfig+"\\vuescan_zooscan_2400dpi_frame2_large.ini");
		if (conffile != 1) { 
			if (isOpen("Log")) {	selectWindow("Log");	run("Close");	} // if
			print("[VueScan]");
			
			print("[Input]");
			print("Source="+source);
			print("Options=2");
			print("DefaultFolder=C:");
			
			print("[Input-"+scanner+"-Flatbed]");
			print("Media=1");
			print("BitsPerPixel=3");
			print("MakeGrayFrom=2");
			print("PreviewResolution=8");
			print("ScanResolution=3");
			print("Rotation=3");
			print("Mirror=1");
			print("FileType=2");
			
			print("[Crop-"+scanner+"-Flatbed]");
			print("CropSize=0");
			print("XSize="+XSizeL);
			print("YSize="+YSizeL);		
			print("AutoOffset=0");
			print("PreviewArea=0");		
			print("PreviewXSize="+XSizeL);
			print("PreviewYSize="+YSizeL);
			print("PreviewXOffset="+XOffsetL);
			print("PreviewYOffset="+YOffsetL);
			
			print("[Color-"+scanner+"-Flatbed]");
			print("ColorBalance=0");
			
			print("[Output]");
			print("JPEGProfile=0");
			print("RawCompression=0");
			print("LogFile=0");
			print("Copyright=Zooscan_CNRS_2011_calibration");	
			
			print("[Output-"+scanner+"-Flatbed]");
			print("JPEGFile=0");
			print("RawFile=1");
			print("PDFFile=0");
			
			print("[Prefs-"+scanner+"-Flatbed]");
			print("CropUnits=0");
			print("PrintedUnits=0");
			
			print("[Prefs]");
			print("XOffset="+XOffsetL);
			print("YOffset="+YOffsetL);
			print("StartupTip=0");
			print("WindowXOffset=10");
			print("WindowYOffset=10");
			print("WindowXSize=1008");
			print("WindowYSize=990");
			print("GuidedMode=0");
			print("Options=1");
			print("FontSize=10");
			print("ExternalViewer=0");
			print("ExternalEditor=0");
			print("ImageMemory=8000");
			print("BeepWhenDone=1");	
			print("GraphType=2");
			print("SplashScreen=0");
			
			selectWindow("Log");
			text =  "save=" + pathconfig + "\\vuescan_zooscan_2400dpi_frame2_large.ini";
			run("Text...",text);	
			run("Close");
		} // if narrow
	} // if
	else { message = message+"\n ''vuescan_zooscan_2400dpi_frame2_large.ini'' file not replaced/created.                    ";		} // else
	
	// ------------------------- NARROW 4800 dpi -------------------------------------------------------------------
	if (dpi4800 == true &&  (scanner == "PerfectionV700" || scanner =="PerfectionV750" || scanner =="GT-X900" || scanner =="GT-X970" )) {
		conffile = 	File.exists(pathconfig+"\\vuescan_zooscan_4800dpi_frame1_narrow.ini");
		if (conffile != 1) { 
			if (isOpen("Log")) {	selectWindow("Log");	run("Close");	} // if
			print("[VueScan]");
			
			print("[Input]");
			print("Source="+source);
			print("Options=2");
			print("[Input-"+scanner+"-Flatbed]");
			print("Media=1");
			print("BitsPerPixel=3");
			print("MakeGrayFrom=2");
			print("PreviewResolution=8");
			print("ScanResolution=2");
			print("Rotation=3");
			print("Mirror=1");
			print("FileType=2");
			
			print("[Crop-"+scanner+"-Flatbed]");
			print("CropSize=0");
			print("XSize="+XSizeN);
			print("YSize="+YSizeN);		
			print("AutoOffset=0");
			print("PreviewArea=0");		
			print("PreviewXSize="+XSizeN);
			print("PreviewYSize="+YSizeN);
			print("PreviewXOffset="+XOffsetN);
			print("PreviewYOffset="+YOffsetN);
			
			print("[Color-"+scanner+"-Flatbed]");
			print("ColorBalance=0");
			
			print("[Output]");
			print("JPEGProfile=0");
			print("RawCompression=0");
			print("LogFile=0");
			print("Copyright=Zooscan_CNRS_2011_calibration");	
			
			print("[Output-"+scanner+"-Flatbed]");
			print("JPEGFile=0");
			print("RawFile=1");
			
			print("[Prefs-"+scanner+"-Flatbed]");
			print("CropUnits=0");
			print("PrintedUnits=0");
			
			print("[Prefs]");
			print("XOffset="+XOffsetN);
			print("YOffset="+YOffsetN);
			print("StartupTip=0");
			print("WindowXOffset=10");
			print("WindowYOffset=10");
			print("WindowXSize=1008");
			print("WindowYSize=990");
			print("GuidedMode=0");
			print("Options=1");
			print("FontSize=10");
			print("ExternalViewer=0");
			print("ExternalEditor=0");
			print("ImageMemory=8000");
			print("BeepWhenDone=1");	
			print("GraphType=2");
			selectWindow("Log");
			text =  "save=" + pathconfig + "\\vuescan_zooscan_4800dpi_frame1_narrow.ini";
			run("Text...",text);	
			run("Close");
		} // if narrow
	} // if 4800dpi
	if (dpi4800 == true &&  (scanner == "PerfectionV800" || scanner =="PerfectionV850" || scanner =="GT-X980" )) {
		conffile = 	File.exists(pathconfig+"\\vuescan_zooscan_4800dpi_frame1_narrow.ini");
		if (conffile != 1) { 
			if (isOpen("Log")) {	selectWindow("Log");	run("Close");	} // if
			print("[VueScan]");
			
			print("[Input]");
			print("Source="+source);
			print("Options=2");
			print("DefaultFolder=C:");
			print("[Input-"+scanner+"-Flatbed]");
			print("Media=1");
			print("BitsPerPixel=3");
			print("MakeGrayFrom=2");
			print("PreviewResolution=8");
			print("ScanResolution=2");
			print("Rotation=3");
			print("Mirror=1");
			print("FileType=2");
			
			print("[Crop-"+scanner+"-Flatbed]");
			print("CropSize=0");
			print("XSize="+XSizeN);
			print("YSize="+YSizeN);		
			print("AutoOffset=0");
			print("PreviewArea=0");		
			print("PreviewXSize="+XSizeN);
			print("PreviewYSize="+YSizeN);
			print("PreviewXOffset="+XOffsetN);
			print("PreviewYOffset="+YOffsetN);
			
			print("[Color-"+scanner+"-Flatbed]");
			print("ColorBalance=0");
			
			print("[Output]");
			print("JPEGProfile=0");
			print("RawCompression=0");
			print("LogFile=0");
			print("Copyright=Zooscan_CNRS_2011_calibration");	
			
			print("[Output-"+scanner+"-Flatbed]");
			print("JPEGFile=0");
			print("RawFile=1");
			print("PDFFile=0");
			
			print("[Prefs-"+scanner+"-Flatbed]");
			print("CropUnits=0");
			print("PrintedUnits=0");
			
			print("[Prefs]");
			print("XOffset="+XOffsetN);
			print("YOffset="+YOffsetN);
			print("StartupTip=0");
			print("WindowXOffset=10");
			print("WindowYOffset=10");
			print("WindowXSize=1008");
			print("WindowYSize=990");
			print("GuidedMode=0");
			print("Options=1");
			print("FontSize=10");
			print("ExternalViewer=0");
			print("ExternalEditor=0");
			print("ImageMemory=8000");
			print("BeepWhenDone=1");	
			print("GraphType=2");
			print("SplashScreen=0");
			
			selectWindow("Log");
			text =  "save=" + pathconfig + "\\vuescan_zooscan_4800dpi_frame1_narrow.ini";
			run("Text...",text);	
			run("Close");
		} // if narrow
	} // if 4800dpi
	else { message = message+"\n ''vuescan_zooscan_4800dpi_frame1_narrow.ini'' file not replaced/created.                    ";		} // else
	//	if (message != "Information on files") { showMessage(message);	} // else
} // doc
//	else {showMessage("Configuration files NOT modified/replaced.                  ");	} // 

// -------------------------- FIN ----------------------------------------------------------------------------
docu = toString(docu);
ret = docu+" "+check+" "+proj+" "+doc+" "+prt+" "+path+" "+fin;

return ret;
